PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '00'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = EMS-TMR_encodingv1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instructions_part2
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    TextComponent instructions
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Willkommen bei der zweiten Aufgabe des Experiments.

        Hier werden dir Word-Bild Paare präsentiert, wobei dir das Word vorgespielt und das Bild im Anschluss visuell präsentiert wird. Deine Aufgabe ist es, sich die Word-Bild Paare bestmöglichst zu merken.  Versuche aufmerksam zu bleiben! Deine Lernleistung wird im Anschluss abgefragt werden.

        Um sich die Word-Bild Paare besser merken zu können stelle dir bitte ein mentales Bild vor, welches sowohl das Word, als auch das Bild enthält.

        Beispiel:




        Drücke nun eine beliebige Taste, um mit einen Beispieldurchlauf zu starten.
    KeyboardComponent key_resp
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions = """ Welcome to the second task of the experiment.
            Here you will be presented with word-image pairs, whereby the word is played to you and the image is then presented visually. Your task is to memorize the word-picture pairs as best you can.  Try to stay attentive! Your learning performance will be tested afterwards.
            In order to memorize the word-picture pairs better, please imagine a mental picture that contains both the word and the picture.
            Now press any key to start a practice run."""
    ImageComponent image
      image = stimuli/mentales Bild.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine fixation_cross
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    TextComponent cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = X
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  Routine image_stimuli
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    ImageComponent image_2
      image = stimuli/image_21.webp
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine word_stimuli
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    SoundComponent word
      sound [set every repeat] = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine feedback_practice
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if false_alarms==0 and misses==0:
            localizer_repetition.finished=True
            feedback_string = 'Gratuliere, Sie haben alles richtig gemacht!\n\n'
            feedback_string += 'Es geht nun weiter mit dem tatsächlichen Experiment.\n\n'
            feedback_string += 'Bitte drücken Sie eine Taste um fortzufahren.'
            text_feedback.text = feedback_string
        else:
            feedback_string = ''
            if misses:
                feedback_string += f'Sie haben  sich bei 2 Paaren kein mentales Bild gemacht.\n'
            if false_alarms:
                feedback_string += f'Sie haben {false_alarms}x an der falschen  Stelle gedrückt.\n'
            feedback_string += '\n\nDrücken Sie nur eine Taste, wenn ein Bild falsch herum ist. '
            feedback_string += 'Falls Sie Fragen haben, stellen Sie diese gerne dem Experimentleiter.\n'
            feedback_string += '\nDrücken Sie eine beliebige Taste um die Übung zu wiederholen.'
            text_feedback.text = feedback_string

            # reset counters
            i_localizer = 0
            false_alarms = 0
            misses = 0
    KeyboardComponent key_resp_2
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = dummy...somethign went wrong
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  Routine instruction_end
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Super, du hast nun alle 120 Word-Bild Paare gesehen und versucht, dir so viele wie möglich zu merken, indem du dir jeweils ein mentales Bild des Wortes und des Bildes gebildet hast.

        Nun geht es weiter mit der nächsten Aufgabe, um das Gelernte noch weiter zu vertiefen.
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            text = """Great, you have now seen all 120 word-image pairs and tried to memorize as many as possible by forming a mental image of each word and image.
            Now move on to the next task to consolidate what you have learned. """
  Routine instructions_part2_2
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    TextComponent text_2
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Das waren jetzt 3 Beispieldurchgänge. Konntest du dir zu jedem Paar ein mentales Bild bilden?

        Die soeben gezeigten Wort-Bild Paaare gehören NICHT zu den Paaren, die du dir merken sollst.

        Im Folgenden werden dir nun alle Wort-Bild Paare gezeigt, von denen du dir so viele wie möglich merken sollst.

        Sobald du bereit bist können wir mit dem Experiment starten. Drücke eine beliebige Taste um zu starten.
    KeyboardComponent key_resp_3
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        if language == "english":
            text_2 = """These were 3 sample runs. Were you able to form a mental image for each shown pair?
            The word-picture pairs just shown are NOT among the pairs that you should memorize.
            You will now be shown all the word-picture pairs, of which you should memorize as many as possible.
            Press any button to start the experiment."""
Flow
  Routine instructions_part2
  LoopInitiator encoding_trials_prac loopType="TrialHandler"
    loopType = sequential
    nReps = n_encoding_trials_prac
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    Routine fixation_cross
    Routine word_stimuli
    Routine image_stimuli
  LoopTerminator encoding_trials_prac
  Routine instructions_part2_2
  LoopInitiator encoding_trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine fixation_cross
    Routine word_stimuli
    Routine image_stimuli
  LoopTerminator encoding_trials
  Routine instruction_end
