PsychoPy2experiment version="2024.2.4"
Settings
  Audio latency priority = 0
  Audio lib = pyo
  Experiment info = {'participant': '0', 'session': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  backgroundFit = contain
  color = 1.0000, 1.0000, 1.0000
  expName = EMS-TMR_retrievalv1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instuctions_part3
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Willkommen zum dritten Teil des Experiments.

        Hier wirst du jetzt die Möglichkeit haben die Wort-Bild Paare noch besser zu lernen. Im Folgenden wird dir immer ein Word vorgespielt. Deine Aufgabe ist es anschließend anzugeben, ob das Wort dir bereits bekannt ist (alt) oder ob du es bisher noch nicht gehört hattest (neu). Sollte dir das Wort bekannt sein wirst du anschließend aufgefordert aus 4 Bildern das zu dem Wort gehörige Bild auszuwählen.
    KeyboardComponent key_resp
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if session==str(1):
            continueRoutine = True
        else:
            continueRoutine = False

        if language == "english":
            text = """Welcome to the third part of the experiment.
            Here you will now have the opportunity to learn the word-picture pairs even better.
            """
  Routine sound_word
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    TextComponent fixation
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = X
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        verb.setSound("stimuli/sounds/de_" + df_trial.word)
        verb.play() # play the sound
        print (verb)

        is_newword = bool ("WAHR" in df_trial.is_new)
        print (is_newword)
      End Routine:
        verb.stop()
    SoundComponent verb
      sound [set every repeat] = "stimuli/sounds/de_" + df_trial.word
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine decision_newword
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    CodeComponent decision_code
      Code Type = Auto->JS
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      Begin Routine:
        initial_value_misses = misses
        initial_value_false_alarms = false_alarms
        initial_value_incorrect_associations = incorrect_associations
      Each Frame:
        if key_resp_7.keys == "g" and is_newword == True:
            false_alarms += 1
            print ("False Alarm") #neu als bekannt ausgewählt
        elif key_resp_7.keys == "g" and is_newword == True:
            print ("Correct press")
        elif key_resp_7.keys == "b" and is_newword == True:
            print ("Correct press")
        elif key_resp_7.keys == "b" and is_newword == False:
            misses += 1
            print ("Miss") #bekanntes als neu ausgewählt
        elif key_resp_7.status == FINISHED:
            print ("too slow")
            text_7.text = "Zu langsam, antworte schneller."
            text_7.color = red
        else:
            print ("error")
    TextComponent text_7
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      pos = (0, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        War dir das Wort bekannt?

        bekannt /alt                      unbekannt/neu
    KeyboardComponent key_resp_7
      allowedKeys = 'b','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent known_green
      fillColor = none
      lineColor = -1.0000, 1.0000, -0.0039
      lineWidth = 1.5
      pos = (-0.25, 0)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent new_blue
      fillColor = none
      lineColor = -0.2157, 0.1686, 0.8588
      lineWidth = 1.5
      pos = (0.25, 0)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine imagechoice
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    ImageComponent image_choice1
      image = stimuli/dog/dog000.png
      pos = (0, 0.6)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
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    ImageComponent image_choice2
      image = stimuli/flower/flower000.png
      pos = (0.6, 0)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
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    ImageComponent image_choice3
      image = stimuli/flower/flower005.png
      pos = (0, -0.6)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
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    TextComponent text_8
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Welches Bild passt zu dem Wort?
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        image_choice1.image = "stimuli/" + df_trial.image1
        image_choice2.image = "stimuli/" + df_trial.image2
        image_choice3.image = "stimuli/" + df_trial.image3
        image_choice4.image = "stimuli/" + df_trial.image4

        if df_trial.correct != None:
            correct_image = "stimuli/" + df_trial.correct
        elif df_trial.correct == "N/A":
            correct_image = False

        #define correct_buttonpress
        if correct_image == image_choice1.image:
            correct_buttonpress = ["r"]
        elif correct_image == image_choice2.image:
            correct_buttonpress = ["b"]
        elif correct_image == image_choice3.image:
            correct_buttonpress = ["y"]
        elif correct_image == image_choice4.image:
            correct_buttonpress = ["g"]
        elif correct_image == False:
            correct_buttonpress = []
        else:
            print ("error")

        button_press = event.getKeys()
      Each Frame:
        if misses == initial_value_misses and false_alarms == initial_value_false_alarms \
        and button_press != correct_buttonpress and len (button_press) != []:
            incorrect_associations = incorrect_associations + 1

        if key_resp_retrieval.status == FINISHED and len (button_press) == []:
            print ("no answer")
            text_8.text = """Du musst schneller antworten!"""
            text_8.color = red
      End Routine:
        i_retrieval += 1
    KeyboardComponent key_resp_retrieval
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_choice4
      image = stimuli/face/face005.png
      pos = (-0.6,0)
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = t_img_retrieval
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    PolygonComponent img1_polygon
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos = (0, 0.6)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent img2_polygon
      fillColor = None
      lineColor = -1.0000, -1.0000, 1.0000
      lineWidth = 2
      pos = (0.6, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent img3_polygon
      fillColor = None
      lineColor = 1.0000, 1.0000, -1.0000
      lineWidth = 2
      pos = (0, -0.6)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent img4_polygon
      fillColor = None
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 2
      pos = (-0.6, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine fixation_cross
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    TextComponent retrieval_fixation
      color = -1.0000, -1.0000, -1.0000
      durationEstim = 1.5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_fixation_cross
      text = X
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  Routine retrieval_feedback
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if false_alarms==0 and misses==0 and incorrect_associations == 0:
            feedback_string = 'Super, alles richtig!\n\n'
            retrieval_text.text = feedback_string
            retrieval_text.color = 'green'
        else:
            feedback_string = ''
            if misses != initial_value_misses:
                feedback_string += f'Das Wort war dir nicht bekannt.\n'
            if false_alarms != initial_value_false_alarms:
                feedback_string += f'Das Wort war dir bekannt, du hast es jedoch als unbekannt eingestuft.\n'
            if incorrect_associations != initial_value_incorrect_associations:
                feedback_string += f' Du hast leider das falsche Bild zu dem richtig als bekannt erkannten Wort ausgewählt. \n'
            retrieval_text.text = feedback_string
            retrieval_text.color = 'red'
    TextComponent retrieval_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = dummy...something went wrong
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  Routine instructions_part3_2
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Wie auch bei der ersten und zweiten Aufgabe wirst du hier zunächst eine Übung durchlaufen können.

        Falls du noch Fragen hast, melde dich gerne beim Experimentleiter.

        Ansonsten drücke gerne eine beliebige Taste, um mit der Übung zu starten.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if session==str(1):
            continueRoutine = True
        else:
            continueRoutine = False

        if language == "english":
            text_2 = """ As with the first and second tasks, you will first be able to complete a practice exercise.
            If you have any questions, please contact the experimentor.
            Otherwise, press any button to start the exercise."""
  Routine practice_feedback
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent feedback_loop
      Code Type = Auto->JS
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      Begin Routine:
        if false_alarms==0 and misses==0 and incorrect_associations == 0:
            retrieval_repetition.finished=True
            feedback_string = 'Gratuliere, du hast alles richtig gemacht!\n\n'
            feedback_string += 'Es geht nun weiter mit dem tatsächlichen Experiment.\n\n'
            feedback_string += 'Bitte drücke eine Taste um fortzufahren.'
            text_feedback.text = feedback_string
        else:
            feedback_string = ''
            if misses:
                feedback_string += f'Du hast {misses}x verpasst ein altes Wort als bekannt anzugeben und es als neu betitelt.\n'
            if false_alarms:
                feedback_string += f'Du hast {false_alarms}x ein neues Wort als bekannt gewertet. \n'
            if incorrect_associations:
                feedback_string += f'Du hast {incorrect_associations}x ein falsches Bild einem bekannten Wort zugeordnet. \n'
            feedback_string += 'Falls du Fragen hast, stelle diese gerne dem Experimentleiter.\n'
            feedback_string += '\nDrücke eine beliebige Taste um die Übung zu wiederholen.'
            text_feedback.text = feedback_string

            # reset counters
            i_retrieval = 0
            false_alarms = 0
            misses = 0
            incorrect_associations = 0
    TextComponent text_feedback
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = dummy... something went wrong
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  Routine instructions_part3_3
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Nun folgt die erste Testung deines erarbeiteten Wissens. Die Aufgabe ändert sich hierbei nicht. Es wird dir wieder zunächst ein Wort vorgespielt, welches du als alt oder neu einstufen musst und anschließend werden dir 3 Bilder präsentiert aus welchen du das zu dem Wort passende Bild auswählen kannst. Ab sofort wirst du allerdings kein Feedback mehr erhalten, ob deine Antwort richtig oder falsch war.

        Drücke eine beliebige Taste um fortzufahren.
    KeyboardComponent key_resp_4
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if session == str(1):
            if language == "english":
                text_3 = """ Now comes the first test of your acquired knowledge.
                The task does not change here. Again, you will first be presented with a word that you have to classify as old or new and then 3 pictures will be presented from which you can choose the picture that matches the word.
                From now on, however, you will no longer receive feedback as to whether your answer was correct or incorrect. """
        if session == str(2):
            if language == "deutsch":
                text_3 = """ Willkommen zur letzten Aufgabe dieses Experiments.
                Ich hoffe du konntest dich während des Mittagsschlafs gut erholen und bist nun fit für die Aufgabe.
                Hier wird dein Wissen nocheinmal geprüft.Die Aufgabe ist hierbei dieselbe wie auch vor dem Mittagschlaf.
                Du wirst wieder Wörter vorgespielt bekommen und musst entscheiden, ob das Wort eines der 120 Wörter ist, die du gelernt hast oder ob es neu ist.
                Anschließend kannst du wieder aus 3 Bildern das zu dem Wort passende Bild auswählen. Du wirst diesmal auch kein Feedback zu deinen Antworten erhalten.
                Versuche dich wieder zu konzentrieren und so schnell und akkurat wie möglich zu antworten.
                Viel Erfolg!"""
            if language == "english":
                text_3 = """Welcome to the last task of this experiment.
                I hope you had a good rest during your afternoon nap and are now fit for this task.
                The task is the same as before the nap.
                You will be played words again and have to decide whether the word is one of the 120 words you have learned or whether it is new.
                You can then choose the one image that matches the word from 3 pictures. This time you will not receive any feedback on your answers.
                Try to concentrate and answer as quickly and accurately as possible.
                Good luck! """
  Routine instructions_part3_3_1
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Versuche aufmerksam zu bleiben und so schnell und akkurat wie möglich zu antworten. Weiterhin wäre es super, wenn du es schaffst, so still wie möglich zu liegen und deinen Kopf nicht zu bewegen, um eine gute Datenqualität zu garantieren.

        Falls du noch Fragen hast melde dich gerne  beim Experimentleiter.

        Andernfalls drücke eine beliebige Taste, um mit dem Experiment zu starten.
    KeyboardComponent key_resp_5
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            text_4 = """Try to stay attentive and answer as quickly and accurately as possible. It would also be great if you managed to lie as still as possible and not move your head in order to guarantee good data quality.
            If you have any questions, please contact the experimentor.
            Otherwise, press any button to start the experiment."""
  Routine instruction_end
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    TextComponent text_5
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Sehr gut, du hast es geschafft.
        Die Übung ist nun beendet.

        Melde dich bitte beim Experimentleiter.
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            text_5 = """ Very nice, you made it. The exercise is now over.
            Please inform the experimentor that you are finished."""
  Routine startup_code
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    CodeComponent startup
      Code Type = Py
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      Begin Experiment:
        import pandas as pd

        subj_id = expInfo['participant']
        session = expInfo["session"]

        df_retrieval_1 = pd.read_excel(f"C:/Users/elena/Nextcloud/Masterthesis_EMS-TMR/EMS-TMR-Experiment/sequences/{subj_id}_retrieval_1.xlsx")
        df_retrieval_2 = pd.read_excel(f"C:/Users/elena/Nextcloud/Masterthesis_EMS-TMR/EMS-TMR-Experiment/sequences/{subj_id}_retrieval_2.xlsx")
        df_retrieval_3 = pd.read_excel(f"C:/Users/elena/Nextcloud/Masterthesis_EMS-TMR/EMS-TMR-Experiment/sequences/{subj_id}_retrieval_3.xlsx")

        # set variables we will access later
        i_retrieval = 0
        initial_value_misses = 0
        initial_value_false_alarms = 0
        initial_value_incorrect_associations = 0

        ##set sound to a different samplerate!!!
        verb = sound.Sound('A', stereo= True, hamming=True, secs=-1, sampleRate= 24000)


        # store answers
        false_alarms = 0
        misses = 0
        incorrect_associations = 0

        # set the number of repetitions we have
        n_retrieval_trials = df_retrieval_1.shape[0]
        n_retrieval2_trials = df_retrieval_3.shape [0]
        n_retrieval_trials_prac = 6

        if PILOTING:
            n_retrieval_trials = 5
            n_retrieval2_trials = 3
            n_retrieval_trials_prac = 6
            print('DUMMY TRIALS: subj_id is set to 0')
    CodeComponent settings
      Code Type = Auto->JS
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      Begin Experiment:
        t_img_retrieval = 5
        t_isi_retrieval = 2.5
        t_buffer = 10
        image_size = 0.5
        t_fixation_cross = 1.5


        n_retrieval_trials_prac = 6
        n_retrieval_trials = 188
        n_retrieval2_trials = 188
        cross_color = (-0.5, -0.5, -0.5)
        letter_height=0.06
        language = "german"

        # 2. session
        if session==str(2):
            retrieval_trials_prac.finished = True
            retrieval_repetition.finished = True
            retrieval_trials.finished = True

        #trigger müssen noch richtig definiert werden
        trigger_img = {}
        trigger_img['dog'] = 1
        trigger_img['car']   = 2
        trigger_img['flower']   = 3
        trigger_img['face']   = 4

        trigger_break_start = 91
        trigger_break_stop = 92
        trigger_buf_start = 61
        trigger_buf_stop = 62
        trigger_fixation_pre1 = 81
        trigger_fixation_pre2 = 82

        # these get added depending on the trial
        # ie. Gesicht in localizer = 1, as cue = 11, as sequence=21
        trigger_base_val_retrieval = 0
        trigger_base_val_retrieval_distractor = 100
    CodeComponent function
      Code Type = Py
      Begin Experiment:
        import os.path as osp
        def get_image_name(filename):
            return osp.splitext(osp.basename(filename))[0]
  Routine instruction_part4
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if session==str(1):
            continueRoutine = False
        else:
            continueRoutine = True

        if language == "english":
            text_2 = """ """
    TextComponent text_6
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Willkommen
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine save_reset
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        #save feedback round scores
        false_alarms_feedback = false_alarms
        misses_feedback = misses
        incorrect_associations_feedback = incorrect_associations


        # reset counters
        i_retrieval = 0
        false_alarms = 0
        misses = 0
        incorrect_associations = 0
  Routine instructions_part3_1
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    TextComponent text_9
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Auch wenn das Wort für dich unbekannt ist, kannst du anschließend eines von vier Bildern auswählen, welches zu dem Wort gehören könnte, wäre es dir doch bekannt.

        Für die Entscheidung, ob das Wort bekannt ist, hast du 2 Sekunden Zeit. Drücke links (grün), wenn dir das Wort bekannt war und drücke rechts (blau), wenn dir das Wort unbekannt war.

        Für die Auswahl des passenden Bildes bekommst du 5 Sekunden Zeit.
        Drücke die passende Taste, um das Bild auszuwählen.
    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        if session==str(1):
            continueRoutine = True
        else:
            continueRoutine = False

        if language == "english":
            text = """
            In the following, a word will be played. Your task is to indicate whether you already know the word (old) or whether you have never heard it before (new).
            If you know the word, you will then be asked to choose the picture that is associated with the word from four choices.
            You have 2 seconds to answer whether the word was new.
            You have 5 seconds to decide which image fits the word"""
    KeyboardComponent key_resp_8
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine reset
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        # reset counters
        i_retrieval = 0
        false_alarms = 0
        misses = 0
        incorrect_associations = 0
  Routine df_marking_1
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    CodeComponent df_trial
      Code Type = Py
      Begin Routine:
        df_trial = df_retrieval_1.iloc[i_retrieval]
        print (df_trial)
  Routine df_marking_2
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    CodeComponent df_trial_2
      Code Type = Py
      Begin Routine:
        df_trial = df_retrieval_2.iloc[i_retrieval]
        print (df_trial)

        if session == 2:
            df_trial = df_retrieval_3.iloc[i_retrieval]
            print (df_trial)
Flow
  Routine startup_code
  Routine instuctions_part3
  Routine instructions_part3_1
  Routine instructions_part3_2
  LoopInitiator retrieval_repetition loopType="TrialHandler"
    loopType = sequential
    nReps = 99
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    LoopInitiator retrieval_trials_prac loopType="TrialHandler"
      loopType = random
      nReps = n_retrieval_trials_prac
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      Routine df_marking_1
      Routine fixation_cross
      Routine sound_word
      Routine decision_newword
      Routine imagechoice
      Routine retrieval_feedback
    LoopTerminator retrieval_trials_prac
    Routine practice_feedback
  LoopTerminator retrieval_repetition
  Routine reset
  LoopInitiator retrieval_trials loopType="TrialHandler"
    loopType = random
    nReps = n_retrieval_trials
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    Routine df_marking_1
    Routine fixation_cross
    Routine sound_word
    Routine decision_newword
    Routine imagechoice
    Routine retrieval_feedback
  LoopTerminator retrieval_trials
  Routine save_reset
  Routine instructions_part3_3
  Routine instructions_part3_3_1
  LoopInitiator retrieval2_trials loopType="TrialHandler"
    loopType = random
    nReps = n_retrieval2_trials
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    Routine df_marking_2
    Routine fixation_cross
    Routine sound_word
    Routine decision_newword
    Routine imagechoice
  LoopTerminator retrieval2_trials
  Routine instruction_end
